PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1366, 768]
  expName = Dual_para
  keyboardBackend = ioHub
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Routines
  Routine Instruccions
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    TextComponent Instrucccions
      letterHeight = 36
      startVal [time (s)] = 0.0
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      text:
        A continuación presione la barra espaciadora para comenzar el experimento.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Circle
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        #import random
        from numpy import random
        import math

        # Function to calculate distance between two points
        def distance(point1, point2):
            return ((point1[0] - point2[0])**2 + (point1[1] - point2[1])**2)**0.5

        def rad2grad(rad):
            return rad*180/math.pi

        # Define size of the circle
        circle_radius = 108/2
        circle_speed = 20  # Initial speed
        circle_pos = [0,0]
        circle_direction = random.uniform(0, 2 * math.pi)  # Initial direction (random)

        cross_color = "white"

        # Define boundaries
        boundary_x_min = -win.size[0] / 2 + circle_radius
        boundary_x_max = win.size[0] / 2 - circle_radius
        boundary_y_min = -win.size[1] / 2 + circle_radius
        boundary_y_max = win.size[1] / 2 - circle_radius

        # Define la duración del estímulo
        stimulus_duration = 0.5

        # promedio de las duraciones entre estimulos
        between_stimuli = 2.0
      Begin Routine:
        next_flash_time = core.getTime() + stimulus_duration + random.normal(loc=between_stimuli, scale=1) + 1 # Initial flash time

        stimulus = "X"
        all_letters = ["M", "N", "P", "L"]

        last_flash_time = None
        offset_time = core.getTime() + stimulus_duration
      Each Frame:
        # Calculate the new position based on speed and direction
        circle_pos[0] += circle_speed * math.cos(circle_direction)
        circle_pos[1] += circle_speed * math.sin(circle_direction)


        # Check for collisions with boundaries
        if circle_pos[0] <= boundary_x_min or circle_pos[0] >= boundary_x_max:
            circle_direction = math.pi - circle_direction
        if circle_pos[1] <= boundary_y_min or circle_pos[1] >= boundary_y_max:
            circle_direction = -circle_direction

        # Randomly adjust speed and direction
        if random.random() < 0.02:  # 2% chance
            circle_speed = random.uniform(5, 20)
            circle_direction += random.uniform(-math.pi/2, math.pi/2)

        mouse_pos = mouse.getPos()
        dist = distance(mouse_pos, circle.pos)
        #print(dist)

        # Update figure color based on distance (adjust the values)
        if dist < 100:
            circle.fillColor = "green"
        elif dist < 200:
            circle.fillColor = "yellow"
        else:
            circle.fillColor = "red"

        # print(stimulus)

        # Check for fixation cross flash
        if core.getTime() >= next_flash_time:
            last_flash_time = next_flash_time
            # print(cross_color)
            stimulus = random.choice(all_letters)
            win.flip()
            next_flash_time = core.getTime() + stimulus_duration + random.normal(loc=between_stimuli, scale=1)  # Schedule the next flash
            offset_time = last_flash_time + stimulus_duration
            print(offset_time)

        if core.getTime() >= offset_time:
           stimulus = ""
           win.flip()
    PolygonComponent circle
      fillColor = white
      pos [set every frame] = circle_pos
      shape = circle
      size = (108, 108)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent fixation_cross
      color [set every frame] = $cross_color
      letterHeight = 48
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = +
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    TextComponent Letter
      letterHeight = 48
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 9.0
      text [set every frame] = $stimulus
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  Routine Blank
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    TextComponent Blank_1
      letterHeight = 36
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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  Routine Instruction_2
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    TextComponent text
      letterHeight = 36
      startVal [time (s)] = 0.0
      text = Sigue el circulo con el mouse 
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End
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    TextComponent Terminado
      letterHeight = 36
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = End
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  Routine Welcome_screen__2
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    TextComponent Welcome
      letterHeight = 36
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Bienvenido 
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Flow
  Routine Welcome_screen__2
  Routine Instruccions
  Routine Blank
  Routine Instruction_2
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine Circle
  LoopTerminator trials
  Routine End
